// Open image stack from arguments if available
var closeWindow = false;
if (lengthOf(getArgument()) > 0) {
	// Open the virtual stack of images
	open(getArgument(), "virtual");
	closeWindow = true;
}

// Crop image stack to 1500px diameter circle in center of image
r = 750;
x = (getWidth() / 2) - r;
y = (getHeight() / 2) - r;
setTool("oval");
makeOval(x, y, r * 2, r * 2);
run("Crop");
// saveAs("tif", "GPM/images/" + getTitle());

// Subtract background from image stack
run("Subtract Background...", "rolling=10 light stack");
// Blur image to reduce breaking up of germination tubes
run("Gaussian Blur...", "sigma=1 stack");
// normalize contrast 
run("Enhance Contrast...", "saturated=0.50 normalize process_all use");

// Generate a binary image from our image stack
setAutoThreshold("MaxEntropy stack");
run("Convert to Mask", "method=MaxEntropy background=Light");
// Remove some of the small speckles
run("Despeckle", "stack");
saveAs("tif", "GPM/images/" + getTitle());

// Generate ROIs
run("Set Measurements...", "area centroid perimeter fit shape feret's stack redirect=None decimal=3");
run("Analyze Particles...", "size=80-600 circularity=0.00-1.00 show=Overlay display exclude include add stack");
roiManager("Show None");
saveAs("Results", "GPM/results/Results_" + File.getNameWithoutExtension(getTitle()) + ".csv");

// Close ImageJ window when running in batches
if (closeWindow) {
	run("Quit");
}
